PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = memoryrecall_task
  keyboardBackend = ioHub
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Routines
  Routine welcomeScreen
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = welcome to our experiment
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    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyTrial
    TextComponent textStudy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stim_word
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  Routine testTrial
    TextComponent textTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_word
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    KeyboardComponent keyTest
      allowedKeys = 'y','n'
      correctAns = $yn_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testInstructions
    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get ready for the test
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    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endRoutine
    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thanks for participating
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    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine welcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'table'},
      {'stim_word': 'chair'},
      {'stim_word': 'computer'},
      {'stim_word': 'pen'},
      {'stim_word': 'laptop'},
      {'stim_word': 'mobile'},
      {'stim_word': 'watch'},
      {'stim_word': 'umbrella'},
      {'stim_word': 'food'},
      {'stim_word': 'medicine'},
      {'stim_word': 'dress'},
      {'stim_word': 'machine'},
      {'stim_word': 'toilet'},
      {'stim_word': 'mirror'}]
    Routine studyTrial
  LoopTerminator trials
  Routine testInstructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'table', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'chair', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'computer', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'pen', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'laptop', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'mobile', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'watch', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'umbrella', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'food', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'medicine', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'dress', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'machine', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'toilet', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'mirror', 'old_new': 'old', 'yn_key': 'y'},
      {'stim_word': 'newspaper', 'old_new': 'new', 'yn_key': 'n'},
      {'stim_word': 'photo', 'old_new': 'new', 'yn_key': 'n'},
      {'stim_word': 'bag', 'old_new': 'new', 'yn_key': 'n'},
      {'stim_word': 'cycle', 'old_new': 'new', 'yn_key': 'n'},
      {'stim_word': 'lipstick', 'old_new': 'new', 'yn_key': 'n'}]
    Routine testTrial
  LoopTerminator trials_2
  Routine endRoutine
